CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Test 1
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Test 1
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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enabled:False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
    Select the input image:Test 1
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

EnhanceEdges:[module_num:7|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enabled:False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
    Name the output image:EdgedImage
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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