CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C0")
    Name to assign these images:Test_1
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceEdges:[module_num:5|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notes:['Defined the edges of the cells, useful for the Enhance or Suppress to work well']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
    Select the input image:Test_1
    Name the output image:EdgedImage
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    Select an edge-finding method:Prewitt
    Select edge direction to enhance:All
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
EnhanceOrSuppressFeatures:[module_num:6|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notes:['Gives definition to the cells - 3D']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
    Select the input image:EdgedImage
    Name the output image:EnhanceOrSuppressFeatures_DIC
    Select the operation:Enhance
    Feature size:10
    Feature type:DIC
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    Smoothing scale:2.0
    Shear angle:0.0
    Decay:0.95
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
Crop:[module_num:7|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
    Select the input image:EnhanceOrSuppressFeatures_DIC
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,end
    Top and bottom rectangle positions:0,end
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    Remove empty rows and columns?:All
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
IdentifyPrimaryObjects:[module_num:8|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notes:['The standard settings in this module were adjusted to Robust background. This was necessary to not identify the background as primary objects. I also adjusted the typical diamters in pixels to 50-200. ']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
    Select the input image:Test_1
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):50,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:EdgedImage, Test_1
    Select objects to measure:IdentifyPrimaryObjects

ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output objects:ShrunkenNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:EnhanceOrSuppressFeatures_DIC
    Select method for constructing file names:From image filename
    Select image name for file prefix:Test_1
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/Courses/Comp Bio/Image Processing
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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